PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/%s_%s_%s' % (expInfo['ID-Nummer'], expName, expInfo['date'])
  Experiment info = {'ID-Nummer': '', 'Alter': '', 'Geschlecht (optional)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = guess
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Auto->JS
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      Begin Experiment:
        # import random for letter randomization
        import random as rnd

        #from psychopy import parallel
        #port = parallel.ParallelPort(address = 0x2FE8)
        #pinNumber = 10 #Change to match the pin that is receiving the pulse value sent by your scanner. Set this to None to scan all pins
  Routine load_guess_conditions
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    CodeComponent load_guess_list
      Code Type = Auto->JS
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      Begin Experiment:
        guess_list = []
        practice_list = ["Read", "Guess", "Guess", "Read"]
      Begin Routine:
        guess_list.append(guess_condition)
  Routine instructions1
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    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Teil 1

        Im ersten Teil des Experiments werden Ihnen Wortpaare auf dem Bildschirm angezeigt.

        Zum Beispiel:

        Computer - Tastatur

        Ihre Aufgabe ist es, sich so viele Wortpaare wie möglich einzuprägen.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction1_key
      allowedKeys = 'space', '1', '2', '3', '4', '5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Manchmal wird Ihnen ein einzelnes Wort auf dem Bildschirm angezeigt, bevor Sie das gesamte Wortpaar sehen, und Sie müssen raten, was das andere Wort sein könnte.

        Zum Beispiel:

        Computer - ?

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction2_key
      allowedKeys = 'space', '1', '2', '3', '4', '5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent instructions3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Raten Sie nicht laut, sondern versuchen Sie möglichst viele Assoziationen zum linken Wort leise in Ihrem Kopf zu generieren.

        Zum Beispiel könnten Ihnen zum Wort "Sommerferien" folgende Assoziationen einfallen: Urlaub, Strand, Reisen, Ferienjob, Eis und so weiter.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction3_key
      allowedKeys = 'space', '1', '2', '3', '4', '5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions4
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    TextComponent instructions4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Sie haben 3 Sekunden Zeit, um nach dem Erscheinen des linken Wortes mindestens einen stillen Rateversuch zu machen. Danach müssen Sie angeben, ob Sie einen oder mehrere Rateversuche machen konnten, indem Sie die Tasten 1 oder 2 drücken.

        1) Rateversuch generiert 2) Keinen Rateversuch generiert

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction4_key
      allowedKeys = 'space', '1', '2', '3', '4', '5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions5
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    TextComponent instructions5_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Zusammenfassung:
        Ihre Aufgabe ist es, so viele der auf dem Bildschirm präsentierten Wortpaare wie möglich zu lernen.

        Manchmal wird Ihnen zunächst nur ein einzelnes Wort angezeigt, und Sie müssen raten, was das zugehörige Wortpaar sein könnte. Drücken Sie 1 oder 2, um anzugeben, ob Sie einen Rateversuch gemacht haben.

        Vor dem Experiment werden Sie die Aufgabe üben.

        Drücken Sie eine Taste, um mit der Übung zu beginnen.
    KeyboardComponent instruction5_key
      allowedKeys = 'space', '1', '2', '3', '4', '5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti_learning_practice
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    CodeComponent set_practice_guess_stim
      Code Type = Auto->JS
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      End Routine:
        guess_cond = practice_list.pop()
    TextComponent iti_practice_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine encode
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    TextComponent dash_stim_learning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_learning
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_encoding
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    CodeComponent save_learning_trial_type
      Code Type = Auto->JS
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      Begin Experiment:
        cue_types = {}
        target_types = {}
      Begin Routine:
        cue_types[cue] = guess_cond
        target_types[target] = guess_cond
        thisExp.addData('trial_type', guess_cond)
  Routine feedback_guess
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    CodeComponent skip_guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 1.5
    CodeComponent guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedback = "Ihre Antwort: "

        if guess_reached.keys == "2":
            feedback = feedback + "\nKeinen Rateversuch gemacht."
        elif guess_reached.keys == "1":
            feedback = feedback + "\nRateversuch gemacht."
        else:
            feedback = feedback + "\nKeine Antwort gegeben."
    TextComponent no_response_feedback
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $feedback
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  Routine feedback_rate
    RoutineSettingsComponent feedback_rate
      skipIf = $rate_relatedness.keys == None
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    TextComponent rating_feedback
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Your rating:
    TextComponent rating_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $rate_relatedness.keys
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  Routine feedback_no_rating
    RoutineSettingsComponent feedback_no_rating
      skipIf = $rate_relatedness.keys != None
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    TextComponent no_rating_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You did not rate the relatedness.

        You need to rate how related you think the words are.
  Routine guess
    RoutineSettingsComponent guess
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess
      Code Type = Auto->JS
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      Begin Experiment:
        trial_dur = 0
      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 3
    TextComponent dash_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent guess_stim
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    KeyboardComponent end_guess
      allowedKeys = 'p'
      durationEstim = 0.01
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part1
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    KeyboardComponent end_part1_key
      allowedKeys = 'space','1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie haben den ersten Teil des Experiments abgeschlossen!

        Drücken Sie eine Taste, um fortzufahren.
  Routine guess_response
    RoutineSettingsComponent guess_response
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_response
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 1.5
    TextComponent dash_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent guess_stim_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent guess_question
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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      text:
        1) Ja        H) Nein
    KeyboardComponent guess_reached
      allowedKeys = '1', '2'
      durationEstim = 0.01
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie eine Taste, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = '1', '2', '3', '4', 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_up_trial_counter
      Code Type = Auto->JS
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      Begin Experiment:
        task_trial = 40
      Begin Routine:
        task_trial = 40
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = task_trial < 40
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      text = Pause. Drücken Sie eine Taste, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = 'space',1,2,3,4,5
      forceEndRoutine = True
      startVal [time (s)] = 9.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = task_trial + 1
    TextComponent end_run_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      text = +
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  Routine guess_delay
    RoutineSettingsComponent guess_delay
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_delay
      Code Type = Auto->JS
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      Begin Experiment:
        trial_dur = 0
      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 3
    TextComponent guess_delay_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_dur
      text = +
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  Routine load_iti
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    CodeComponent load_iti
      Code Type = Auto->JS
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      Begin Experiment:
        iti_list = []
      Begin Routine:
        iti_list.append(iti)
  Routine begin_run
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    TextComponent begin_run_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      text = +
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  Routine wait_for_trigger
    RoutineSettingsComponent wait_for_trigger
      skipIf = task_trial < 40
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    TextComponent starting_soon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = fMRT startet gleich...
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    CodeComponent catch_trigger
      Code Type = Auto->JS
      Each Frame:
        #if port.readPin(pinNumber) > 0:
        #    continueRoutine = False #A trigger was detected, so move on
    CodeComponent reset_trial_counter
      Code Type = Auto->JS
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      End Routine:
        if task_trial == 40:
            task_trial = 0
    KeyboardComponent skip_trigger
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep_scanner
    RoutineSettingsComponent prep_scanner
      skipIf = task_trial < 40
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    KeyboardComponent scanner_ready_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ready_set_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Der Scanner wird vorbereitet.
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  Routine cued_recall
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    TextComponent cue_stim_recall
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent dash_stim_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent qmark_target
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ?
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    KeyboardComponent end_cued_recall
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent save_recall_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', cue_types[cue])
  Routine recall_response
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    TextComponent dash_stim_recall_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = -
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    TextComponent cue_stim_recall_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $cue
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    TextComponent recall_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Können Sie sich an das Wortpaar erinnern?

        1) Nein        2) Ja
    KeyboardComponent recall_reached
      allowedKeys = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent skip_recall_select
      Code Type = Auto->JS
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      End Routine:
        skip_letters = 0
        trial_dur = 3
        if recall_reached.keys == "2":
            trial_dur = 3
        else:
            trial_dur = 0.01
            skip_letters = 1
  Routine recall_select
    RoutineSettingsComponent recall_select
      forceNonSlip = True
      skipIf = skip_letters == 1
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    CodeComponent letter_choice
      Code Type = Both
      Before JS Experiment:
        function getRandomLetters(targetLetter) {
            // Az elérhető karakterek listája
            const characters = "abcdefghjklmnoprstuvz".split("");

            // Véletlenszerűen választunk 3 karaktert, amelyek nem egyeznek a megadott célkarakterrel
            let randomLetters = [];
            while (randomLetters.length < 3) {
                const randomChar = characters[Math.floor(Math.random() * characters.length)];
                if (randomChar !== targetLetter && !randomLetters.includes(randomChar)) {
                    randomLetters.push(randomChar);
                }
            }

            // Hozzáadjuk a célkaraktert a listához
            randomLetters.push(targetLetter);

            // A karakterek sorrendjének összekeverése
            for (let i = randomLetters.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [randomLetters[i], randomLetters[j]] = [randomLetters[j], randomLetters[i]];
            }

            return randomLetters;
        }

        function generateRecallText(letters) {
            let recallText = "Der letzte Buchstabe des Wortes:\n";
            recallText += `1) ${letters[0]}        `;
            recallText += `2) ${letters[1]}        `;
            recallText += `3) ${letters[2]}        `;
            recallText += `4) ${letters[3]}`;
            return recallText;
        }
      Begin JS Routine:
        target_letter = target.slice((- 1))[0]; // Például ez a célkarakter
        result = getRandomLetters(target_letter);
        psychoJS.experiment.addData("letter_options", result);
        recall_select_text = generateRecallText(result);
        console.log(recall_select_text);
        console.log(trial_dur)
      Begin Routine:
        recall_select_text = "Wählen Sie den letzten Buchstaben des Wortes mit einer Zahlentaste.\n"

        random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)
        target_letter = target[-1]
        while target_letter in random_letters:
            random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)


        random_letters.append(target_letter)

        letters = rnd.sample(random_letters, len(random_letters))

        recall_select_text += "1) " + letters[0] + "        "
        recall_select_text += "2) " + letters[1] + "        "
        recall_select_text += "3) " + letters[2] + "        "
        recall_select_text += "4) " + letters[3]
    TextComponent dash_stim_recall_select
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_recall_select
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent recall_stim_select
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent recall_question_select
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $recall_select_text
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    KeyboardComponent recall_selection
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part2
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    KeyboardComponent end_part2_key
      allowedKeys = 'space', '1', '2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie haben den zweiten Teil des Experiments abgeschlossen!

        Machen Sie eine 5-minütige Pause, bevor Sie fortfahren.

        Drücken Sie eine Taste, um fortzufahren.
  Routine instructions_recall1
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    TextComponent recall_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im nächsten Teil des Experiments müssen Sie das Wortpaar zu jedem auf dem Bildschirm angezeigten Wort abrufen.

        Versuchen Sie, das Wort (3 Sekunden) abzurufen, und geben Sie dann an, ob Sie sich an das Wort erinnern, indem Sie die Tasten 1 (Kann mich nicht erinnern) und 2(Kann mich erinnern) verwenden.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent recall_instructions1_key
      allowedKeys = 'space', '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall2
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    TextComponent recall_instructions1_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Wenn Sie sich an das Wort erinnern können, fragen wir Sie nach dem letzten Buchstaben des Wortes. Sie können aus 4 Optionen wählen (Tasten 1-4).

        Bevor Sie starten, üben Sie die Aufgabe.

        Drücken Sie eine Taste, um mit der Übung zu beginnen.
    KeyboardComponent recall_instructions1_key_2
      allowedKeys = 'space', '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent dash_stim_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_feedback
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim_feedback
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_feedback
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    CodeComponent save_learning_trial_type_2
      Code Type = Auto->JS
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      Begin Experiment:
        cue_types = {}
        target_types = {}
      Begin Routine:
        cue_types[cue] = guess_cond
        target_types[target] = guess_cond
        thisExp.addData('trial_type', guess_cond)
    TextComponent recall_feedback1
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Der letzte Buchstabe:
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    TextComponent recall_feedback2
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target[-1]
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  Routine iti_recall_practice
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    TextComponent iti_recall_practice_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine iti_task
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    TextComponent iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti
      text = +
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  Routine setup_learning_trial
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    CodeComponent set_iti_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        guess_cond = guess_list.pop()
        this_iti = iti_list.pop()
  Routine setup_recall_trial
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    CodeComponent set_iti_guess_stim_2
      Code Type = Auto->JS
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      Begin Routine:
        this_iti = iti_list.pop()
        print(this_iti)
Flow
  Routine welcome
  LoopInitiator guess_conditions loopType="TrialHandler"
    conditionsFile = guess_condition_randomization.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'},
      {'guess_condition': 'Read'},
      {'guess_condition': 'Guess'}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
    Routine load_guess_conditions
  LoopTerminator guess_conditions
  LoopInitiator iti_learning loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = iti_randomization.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9}]
    Routine load_iti
  LoopTerminator iti_learning
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instructions4
  Routine instructions5
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster', 'guess_cond': 'Guess'},
      {'cue': 'Frühstück', 'target': 'Brot', 'guess_cond': 'Read'},
      {'cue': 'Hund', 'target': 'Pfote', 'guess_cond': 'Read'},
      {'cue': 'Park', 'target': 'Baum', 'guess_cond': 'Guess'}]
    Routine iti_learning_practice
    Routine guess
    Routine guess_response
    Routine feedback_guess
    Routine guess_delay
    Routine encode
  LoopTerminator practice_trials
  Routine start_task
  Routine prep_scanner
  Routine wait_for_trigger
  Routine begin_run
  LoopInitiator learning_trials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'target': 'Seil'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Definition', 'target': 'Begriff'},
      {'cue': 'Experiment', 'target': 'Versuch'},
      {'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Leistung', 'target': 'Ehre'},
      {'cue': 'Rauch', 'target': 'Nebel'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Kunde'},
      {'cue': 'Shampoo', 'target': 'Seife'},
      {'cue': 'Soldat', 'target': 'Kämpfer'},
      {'cue': 'Zeichnung', 'target': 'Bleistift'},
      {'cue': 'Anführer', 'target': 'Boss'},
      {'cue': 'Beutel', 'target': 'Sack'},
      {'cue': 'Gast', 'target': 'Zimmer'},
      {'cue': 'Geburtstag', 'target': 'Kerze'},
      {'cue': 'Geschwister', 'target': 'Eltern'},
      {'cue': 'Golf', 'target': 'Loch'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Rasen', 'target': 'Pflege'},
      {'cue': 'Safari', 'target': 'Ausflug'},
      {'cue': 'Sitzgurt', 'target': 'Gesetz'},
      {'cue': 'Vampir', 'target': 'Geist'},
      {'cue': 'Vergangenheit', 'target': 'Erinnerungen'},
      {'cue': 'Agent', 'target': 'Reise'},
      {'cue': 'Brise', 'target': 'Luft'},
      {'cue': 'Decke', 'target': 'Kissen'},
      {'cue': 'Diskussion', 'target': 'Vorlesung'},
      {'cue': 'Eingeweide', 'target': 'Organ'},
      {'cue': 'Floh', 'target': 'Käfer'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Garage', 'target': 'Haus'},
      {'cue': 'Gegenstand', 'target': 'Artikel'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Insel', 'target': 'Meer'},
      {'cue': 'Karneval', 'target': 'Festival'},
      {'cue': 'Mappe', 'target': 'Buch'},
      {'cue': 'Publikum', 'target': 'Applaus'},
      {'cue': 'Pumpe', 'target': 'Reifen'}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
    Routine setup_learning_trial
    Routine guess
    Routine guess_response
    Routine guess_delay
    Routine encode
    Routine iti_task
    Routine task_break
    Routine prep_scanner
    Routine wait_for_trigger
  LoopTerminator learning_trials
  Routine end_part1
  Routine instructions_recall1
  Routine instructions_recall2
  LoopInitiator recall_practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Pfote'},
      {'cue': 'Park', 'target': 'Spielplatz'}]
    Routine iti_recall_practice
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine recall_feedback
  LoopTerminator recall_practice
  LoopInitiator iti_recall loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = iti_randomization.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9},
      {'iti': 4.5},
      {'iti': 6},
      {'iti': 7.5},
      {'iti': 9}]
    Routine load_iti
  LoopTerminator iti_recall
  Routine start_task
  Routine prep_scanner
  Routine wait_for_trigger
  Routine begin_run
  LoopInitiator test_trials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine setup_recall_trial
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine iti_task
    Routine task_break
    Routine prep_scanner
    Routine wait_for_trigger
  LoopTerminator test_trials
  Routine end_part2
