PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/%s_%s_%s' % (expInfo['ID-Nummer'], expName, expInfo['date'])
  Experiment info = {'ID-Nummer': 'f"{randint(0, 999999):06.0f}"', 'Alter': '', 'Geschlecht (optional)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = guess
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Both
      Begin Experiment:
        # import random for letter randomization
        import random as rnd
      Begin JS Experiment:
        //Hide mouse
        document.body.style.cursor='none';
      End JS Experiment:
        document.body.style.cursor='auto';
  Routine load_iti
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  Routine instructions_semantic_mapping1
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    TextComponent sm_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im letzten Teil des Experiments wird Ihnen eine Liste von Wörtern jeweils einzeln auf dem Bildschirm präsentiert. Sie müssen entscheiden, ob das Wort etwas Lebendiges oder Nicht-Lebendiges bezeichnet.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent sm_instructions1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping2
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    TextComponent sm_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Bei manchen Wörtern ist es schwieriger, diese Entscheidung zu treffen als bei anderen. Es gibt nicht immer eine richtige oder falsche Antwort. Verlassen Sie sich auf Ihre Intuition, die Entscheidung liegt bei Ihnen!

        Geben Sie Ihre Antwort mit den Tasten F / G an.

        Drücken Sie die LEERTASTE, um die Aufgabe zu starten.
    KeyboardComponent sm_instructions2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine item
    CodeComponent set_item
      Code Type = Auto->JS
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      Begin Experiment:
        list_item = "None"
      Begin Routine:
        this_list = int(thisList)
        this_run = my_runs[this_list]
        this_item = int(thisIndex)
        list_item = this_run[this_item]
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    KeyboardComponent living_nonliving
      allowedKeys = 'f','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent end_mapping
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent living_nonliving_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = F) Lebendig        G) Nicht lebendig
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    TextComponent semantic_map_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $list_item
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie die LEERTASTE, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_trial_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = 0
  Routine mapping_break
    RoutineSettingsComponent mapping_break
      skipIf = mapping_trial < 60
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_counter
      Code Type = Auto->JS
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      Begin Experiment:
        mapping_trial = 0
      Begin Routine:
        mapping_trial = mapping_trial + 1
        print("mapping_trial", mapping_trial)
      End Routine:
        if mapping_trial == 60:
            mapping_trial = 0

        print('break', mapping_trial)
  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Das ist das Ende des Experiments.

        Vielen Dank!
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = task_trial < 40
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = task_trial + 1
      End Routine:
        if task_trial == 40:
            task_trial = 0

        print('break', task_trial)
  Routine iti
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    TextComponent iti_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine shuffle_items
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    CodeComponent shuffle_lists
      Code Type = Auto->JS
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      Begin Experiment:
        run1 = []
        run2 = []
        run3 = []
        run4 = []
      Begin Routine:
        these_items = [Cue, Target, Mediator1, Mediator2] # assign elements from this row
        rnd.shuffle(these_items) # shuffle order

        # append to separate runs
        run1.append(these_items[0])
        run2.append(these_items[1])
        run3.append(these_items[2])
        run4.append(these_items[3])
  Routine set_up_runs
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    CodeComponent run_setup
      Code Type = Auto->JS
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      Begin Routine:
        my_runs = list(zip(run1, run2, run3, run4))
        rnd.shuffle(my_runs)
        run1, run2, run3, run4 = zip(*my_runs)
      End Routine:
        print(run1)
        print(run2)
        print(run3)
        print(run4)
Flow
  Routine welcome
  Routine instructions_semantic_mapping1
  Routine instructions_semantic_mapping2
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator sm_itis loopType="TrialHandler"
      conditionsFile = sm_iti_randomization.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9},
        {'iti': 4.5},
        {'iti': 6},
        {'iti': 7.5},
        {'iti': 9}]
      Routine load_iti
    LoopTerminator sm_itis
    LoopInitiator load_and_shuffle loopType="TrialHandler"
      conditionsFile = sm_items.xlsx
      isTrials = False
      loopType = random
      nReps = 2
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      conditions:
        [{'Cue': 'Akrobatin', 'Target': 'Seil', 'Mediator1': 'Turnerin', 'Mediator2': 'Zirkus'},
        {'Cue': 'Chips', 'Target': 'Salz', 'Mediator1': 'Kartoffel', 'Mediator2': 'Dip'},
        {'Cue': 'Definition', 'Target': 'Begriff', 'Mediator1': 'Erklärung', 'Mediator2': 'Bedeutung'},
        {'Cue': 'Experiment', 'Target': 'Versuch', 'Mediator1': 'Test', 'Mediator2': 'Labor'},
        {'Cue': 'Fakt', 'Target': 'Wissen', 'Mediator1': 'Wahrheit', 'Mediator2': 'Fiktion'},
        {'Cue': 'Leistung', 'Target': 'Ehre', 'Mediator1': 'Ziel', 'Mediator2': 'Erfolg'},
        {'Cue': 'Rauch', 'Target': 'Nebel', 'Mediator1': 'Zigarette', 'Mediator2': 'Feuer'},
        {'Cue': 'Scheidung', 'Target': 'Anwalt', 'Mediator1': 'Ehe', 'Mediator2': 'Trennung'},
        {'Cue': 'Service', 'Target': 'Kunde', 'Mediator1': 'Hilfe', 'Mediator2': 'Station'},
        {'Cue': 'Shampoo', 'Target': 'Seife', 'Mediator1': 'Conditioner', 'Mediator2': 'Haare'},
        {'Cue': 'Soldat', 'Target': 'Kämpfer', 'Mediator1': 'Krieg', 'Mediator2': 'Armee'},
        {'Cue': 'Zeichnung', 'Target': 'Bleistift', 'Mediator1': 'Bild', 'Mediator2': 'Kunst'},
        {'Cue': 'Anführer', 'Target': 'Boss', 'Mediator1': 'Anhänger', 'Mediator2': 'Präsident'},
        {'Cue': 'Beutel', 'Target': 'Sack', 'Mediator1': 'Tasche', 'Mediator2': 'Känguru'},
        {'Cue': 'Gast', 'Target': 'Zimmer', 'Mediator1': 'Freund', 'Mediator2': 'Besucher'},
        {'Cue': 'Geburtstag', 'Target': 'Kerze', 'Mediator1': 'Kuchen ', 'Mediator2': 'Feier'},
        {'Cue': 'Geschwister', 'Target': 'Eltern', 'Mediator1': 'Bruder', 'Mediator2': 'Schwester'}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
      Routine shuffle_items
    LoopTerminator load_and_shuffle
    Routine set_up_runs
    LoopInitiator semantic_mapping_run1 loopType="TrialHandler"
      conditionsFile = run1_sheet.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'thisList': 0, 'thisIndex': 0},
        {'thisList': 0, 'thisIndex': 1},
        {'thisList': 0, 'thisIndex': 2},
        {'thisList': 0, 'thisIndex': 3},
        {'thisList': 0, 'thisIndex': 4}]
      Routine iti
      Routine item
    LoopTerminator semantic_mapping_run1
  LoopTerminator blocks
  Routine thanks
