PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trigger_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine read_port
    CodeComponent catch_signal
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import parallel
        port = ParallelPort(address = 0x2FE8)
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    TextComponent read_port_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Reading the Port
        Press the number of the pin you want to listen to.
    KeyboardComponent select_pin
      allowedKeys = '1','2','3','4','5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent display_trigger2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(2) 
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    TextComponent display_trigger3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(3) 
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    TextComponent display_trigger4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(4) 
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    TextComponent display_trigger5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(5) 
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    TextComponent display_trigger6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(6) 
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    TextComponent display_trigger7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(7) 
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    TextComponent display_trigger8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(8) 
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    TextComponent display_trigger9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $port.readPin(9) 
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  Routine count_signal
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    TextComponent count_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Counting...

        Will move on after 5 triggers
        Press SPACE to move on manually
    KeyboardComponent exit_routine
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent count_trigger_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $counter
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    CodeComponent the_counter
      Code Type = Auto->JS
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      Begin Routine:
        counter = 0
      Each Frame:
        if frameN > 1: #To allow the 'Waiting for Scanner' screen to display
            trig = triggers.waitTriggers(triggers = [pinNumber], direction = 1, maxWait = 100)
            if trig is not None:
                counter = counter + 1
                if counter > 4:
                    continueRoutine = False #A trigger was detected, so move on
  Routine button_test
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    KeyboardComponent move_on
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent button_press
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent info_press
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Pressed button:
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    TextComponent pressed_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $button
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    CodeComponent catch_button
      Code Type = Auto->JS
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      Begin Experiment:
        button = 'None'
      Each Frame:
        if len(button_press.keys) > 0:
            button = button_press.keys[0]
Flow
  Routine button_test
  Routine read_port
